PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = flanker
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Routines
  Routine trial
    TextComponent stimulus
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = f
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    KeyboardComponent trial_response
      allowedKeys = 'f','j'
      correctAns = f
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Instructions...

        Have fun!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine trial
